//Based on Durstewitz and Gabriel 2006, "Irregular spiking in NMDA-driven prefrontal cortex neurons"


//----------------------------------------------Insert noise-----------------------------------------------------------//
//INSERT MOD FILE FOR SINE WAVE
objref PCns, PVns
objref PCsw, PVsw
objref PCns[nPCcells], PVns[nPCcells]
objref PCsw[nPCcells], PVsw[nPCcells]

proc noise() { local i,GID
	i=0
	forsec PCsoma_list {
			GID = PCgids.x(i)
			PCns[i] = new Random(GID+(nPCcells*$1)*SNd) 
			PCns[i].poisson(0.5)	//was (0.02)	
			PCsw[i] = new membNoise(0.5)
			PCsw[i].dur = tstop //duration of injection
			PCsw[i].freq = 100//180 //80 //how many sinusoidals in a second
			PCsw[i].pkampMax = 0.2 //(nA) injected current amplitude 
			PCsw[i].getRandObjPtr(PCns[i])
			i = i +1
	}

	i=0
	forsec PVsoma_list {
			GID = PVgids.x(i)
			PVns[i] = new Random(GID+(nPVcells*$1)*SNd) 
			PVns[i].poisson(0.5)	//was (0.02)	
			PVsw[i] = new membNoise(0.5)
			PVsw[i].dur=tstop //duration of injection
			PVsw[i].freq = 100 //180 //how many sinusoidals in a second
			PVsw[i].pkampMax = 0.2 //(nA) injected current amplitude 
			PVsw[i].getRandObjPtr(PVns[i])
			i = i +1
	}
}

//---------------------------Initial stimulation (proximal dendrite)(Kuroda, 1998, Constantinides, 2001)---------------//
//Had issues with parallel execution of NetStim. Lets hope that his gets executed 
// for all the stimulated cells.
//Particularly the NetStim will be created and connected with netcon, but no activity will follow!
//Still havent came to a conclusion about the erroneus behaviour or any fix, appart from 
// instantiating NetStim outside any proc!

//The only way to have conditional execution without parser errors
//is to have the commands executed on runtime. Else parser will complain
//about missing variables.
if(save_stimulation_locations){
	{sprint(EXEC_CMD,"{objref stimpidPC2PC[%d]}",nPCcells)}
	{assert(execute1(EXEC_CMD))}
}

objref ncAMPA[nPCcells][Stim_MaxSyn], nsNMDA[nPCcells][Stim_MaxSyn],nsAMPA[nPCcells][Stim_MaxSyn], ncNMDA[nPCcells][Stim_MaxSyn], ampapr[nPCcells][Stim_MaxSyn], nmdapr[nPCcells][Stim_MaxSyn]

objref r_stimPC[nPCcells], rApic_stimPC[nPCcells], rBasal_stimPC[nPCcells] 
objref stim_artcell[nPCcells*Stim_MaxSyn_apic]
objref STIMgids, STIMcells
//keep the GIDs of the stimulation artificial cells
//ALL NetStim artificial cells MUST lie in node 0!
STIMgids = new Vector()
STIMcells = new List()
proc stimulation() { local trg,syn,PID,ApicalNo,rApicIdx,BasalNo,rBasalIdx, interval, number,localID,tmp,ridx,trgGID,artgid  localobj r,rApic,rBasal,ri,rvect,mynil,artcell
	if(PARALLEL){ PC.barrier() }
	//Configure RNG for reproducability over differently distributed parallel environments:
	for kk=0,nPCcells-1{
		r_stimPC[kk] = new Random(SNd*$1 + 165 + kk )
		rApic_stimPC[kk] = new Random(SNd*$1 + 12 + kk)
		rBasal_stimPC[kk] = new Random(SNd*$1 + 67 + kk)
		PID = r_stimPC[kk].uniform(0,1)
	}
	for trg=0, nPCcells-1 {
		if(PARALLEL){
			bool = (PC.id==0)
		}else{
			bool=1
		}
		if (bool) { 
			for syn=0, (Stim_MaxSyn_apic-1) {
				artcell = new NetStim()
				artcell.number = SF//30//50//50
				artcell.interval = 1000/SF//33.3//20
				artcell.start = 0
				artcell.noise = STIMNOISE//0.6//0.2
				//artificial cell gids:
				//MAKE SURE NO GIDS ARE THE SAME!
				artgid = trg + syn*nPCcells + nPCcells + nPVcells 
				//associate artgid with current node (first node):
				PC.set_gid2node(artgid,PC.id)
				//print "Associating artgid=",artgid," with PC.id=",PC.id
				//associate ARTIFICIAL_CELL output to artgid:
				PC.cell(artgid,new NetCon(artcell, mynil),1)
				STIMcells.append(artcell)
			}
		}
	}

	for trg=0, nPCcells - 1  { 
		if(PcellStimList.x(trg)){
			trgGID = ind2gid(trg,0) //ONLY FOR PC CELLS!
			if(PARALLEL){
				bool = PC.gid_exists(trgGID)
				localID = gid2local(PCgids,trgGID) //target cell
			}else{
				bool=1
				localID = trg
			}

			if( bool ){ //&& PcellStimList.x(trg)
				if(save_stimulation_locations){
					{sprint(EXEC_CMD,"{stimpidPC2PC[%d] = new Vector()}",trgGID)}
					{assert(execute1(EXEC_CMD))}
				}
				// Apical input:
				for syn=0, (Stim_MaxSyn_apic-1) {
					PID=r_stimPC[trg].repick()
					rApicIdx = int(rApic_stimPC[trg].uniform(0,PCcells.o(localID).ApicNo-1))
					if(save_stimulation_locations){
						{sprint(EXEC_CMD,"{stimpidPC2PC[%d].append(%f)}",trgGID,PID)}
						{assert(execute1(EXEC_CMD))}
					}
					rApicIdx = 0 //PROXIMAL!
					PCcells.o(localID).apic[rApicIdx] {ampapr[trg][syn] = new GLU(PID)}
					PCcells.o(localID).apic[rApicIdx] {nmdapr[trg][syn] = new nmda_segev(PID)}
					artgid = trg + syn*nPCcells + nPCcells + nPVcells 

					nmdapr[trg][syn].srcgid = artgid
					nmdapr[trg][syn].cellid = trgGID
					nmdapr[trg][syn].sid = syn

					ncAMPA[trg][syn] = makeSynapse(PCcells,0,artgid,ampapr[trg][syn],-10,500,ampaweight_stimulus)
					ncNMDA[trg][syn] = makeSynapse(PCcells,0,artgid,nmdapr[trg][syn],-10,500,nmdaweight_stimulus)
				}

			} //if bool
		} //if stimulated
	} //for PC cells
} //end proc

objref bgrecvec
strdef bgrecvec_filename
AllBGsyns = BG_dendSyn+BG_apicSyn+BG_apicprSyn+BG_PVSyn
objref bns[AllBGsyns], psn[AllBGsyns]
for k = 0, AllBGsyns-1 {
	psn[k] = new Random(SNd*PC.id*AllBGsyns+k)
	psn[k].poisson(0.002)
	bns[k]  = new poissonStim(0.5)
	bns[k].interval=1//SSS 
	bns[k].number=tstop//SSS
	bns[k].start=0
	bns[k].noise=1
	bns[k].noiseFromRandom(psn[k])
}

//--------------------PV background
objref ampaBGPV[nPVcells][BG_PVSyn]
objref nmdaBGPV[nPVcells][BG_PVSyn]
objref BGPV_NMDA[nPVcells][BG_PVSyn]
objref BGPV_AMPA[nPVcells][BG_PVSyn]

//--------------------Background activity 
objref ampaBGd[nPCcells][BG_dendSyn]
objref nmdaBGd[nPCcells][BG_dendSyn]
objref ampaBGp[nPCcells][BG_apicprSyn]
objref nmdaBGp[nPCcells][BG_apicprSyn]
objref ampaBGa[nPCcells][BG_apicSyn]
objref nmdaBGa[nPCcells][BG_apicSyn]

objref BG_AMPAd[nPCcells][BG_dendSyn]
objref BG_NMDAd[nPCcells][BG_dendSyn]
objref BG_AMPAa[nPCcells][BG_apicSyn]
objref BG_NMDAa[nPCcells][BG_apicSyn]
objref BG_AMPAp[nPCcells][BG_apicprSyn]
objref BG_NMDAp[nPCcells][BG_apicprSyn]

objref rUniform_dend[nPCcells*BG_dendSyn], rPoisson_dend[nPCcells*BG_dendSyn]
objref rUniform_apic[nPCcells*BG_apicSyn], rPoisson_apic[nPCcells*BG_apicSyn]
objref rUniform_apicpr[nPCcells*BG_apicprSyn], rPoisson_apicpr[nPCcells*BG_apicprSyn]
objref nhPoissonStim_dend[nPCcells*BG_dendSyn]
objref nhPoissonStim_apic[nPCcells*BG_apicSyn]
objref nhPoissonStim_apicpr[nPCcells*BG_apicprSyn]
objref rateVect
objref netstim_dend[nPCcells*BG_dendSyn]

if(save_background_locations){
	//which PID in which dendrite (basal, apical, apical pr)
	{sprint(EXEC_CMD,"{objref bgstimpid[%d][%d]}",3,nPCcells)}
	{assert(execute1(EXEC_CMD))}
}

if(save_bg_iampa){
	{sprint(EXEC_CMD,"{objref bg_iampa[%d][%d]}",nPCcells,BG_dendSyn)}
	{assert(execute1(EXEC_CMD))}
}

proc backgroundActivity() { local artgid,trg,syn_dend, syn_apic,syn_apicpr,PID,RV,RLB,RLA,localID,trgGID,StimDur,StimFreq,StimNo,SynapsesNo localobj mynil,r,rv,rlb,rla
	r = new Random(SNd*$1 + 300 + PC.id)
	rv = new Random(SNd*$1 +400)
	RV = rv.uniform(1, StimDur)
	PID = r.uniform(0,1)
	rlb = new Random(SNd*$1+160)
	rla = new Random(SNd*$1+560)

	EXEC_CMD = ""
	{sprint(EXEC_CMD,"{xopen(\"%sRateVectors/rateVect_%03d.hoc\")}",SIMGLIA,$1)}
	{assert(execute1(EXEC_CMD))}
	lambdaMax = rateVect.max() 

	for trg=0, nPCcells-1 {
		if(PARALLEL){
			bool = (PC.id==0)
		}else{
			bool=1
		}
		if (bool) { 
			for syn_dend=0, (BG_dendSyn-1) {
				rUniform_dend[trg + (nPCcells*syn_dend)] = new Random(trg + (nPCcells*syn_dend))
				rUniform_dend[trg + (nPCcells*syn_dend)].uniform(0,1)
				rPoisson_dend[trg + (nPCcells*syn_dend)] = new Random(trg + (nPCcells*syn_dend))
				rPoisson_dend[trg + (nPCcells*syn_dend)].poisson(lambdaMax)
				nhPoissonStim_dend[trg + (nPCcells*syn_dend)] = new NonHomPoissonStim()
				nhPoissonStim_dend[trg + (nPCcells*syn_dend)].cellid = trg
				nhPoissonStim_dend[trg + (nPCcells*syn_dend)].synid = syn_dend 
				nhPoissonStim_dend[trg + (nPCcells*syn_dend)].getRandObjPtrUniform(rUniform_dend[trg + (nPCcells*syn_dend)])
				nhPoissonStim_dend[trg + (nPCcells*syn_dend)].getRandObjPtrPoisson(rPoisson_dend[trg + (nPCcells*syn_dend)])
				nhPoissonStim_dend[trg + (nPCcells*syn_dend)].lambdaMax = lambdaMax 
				nhPoissonStim_dend[trg + (nPCcells*syn_dend)].play(rateVect)

				//artificial cell gids:
				artgid = nPCcells+nPVcells+(nPCcells*Stim_MaxSyn_apic) + trg + (nPCcells*syn_dend)
				//associate artgid with current node:
				PC.set_gid2node(artgid,PC.id)
				//print "Associating artgid=",artgid," with PC.id=",PC.id
				//associate ARTIFICIAL_CELL output to artgid:
				PC.cell(artgid,new NetCon(nhPoissonStim_dend[trg + (nPCcells*syn_dend)], mynil),1)
			}
		}
	}

	if(PARALLEL){PC.barrier()}

	for trg=0, nPCcells-1 {
		if(PARALLEL){
			trgGID = ind2gid(trg,0) //ONLY FOR PC CELLS!
			bool = PC.gid_exists(trgGID)
			localID = gid2local(PCgids,trgGID) //target cell	
		}else{
			bool=1
			localID = trg
		}

		if(bool){
			RLB = rlb.uniform(0,PCcells.o(localID).DendNo-1)
			RLA = rla.uniform(0,PCcells.o(localID).ApicNo-1)

			if(save_background_locations){
				{sprint(EXEC_CMD,"{bgstimpid[0][%d] = new Vector()}",trgGID)}
				{assert(execute1(EXEC_CMD))}
				{sprint(EXEC_CMD,"{bgstimpid[1][%d] = new Vector()}",trgGID)}
				{assert(execute1(EXEC_CMD))}
				{sprint(EXEC_CMD,"{bgstimpid[2][%d] = new Vector()}",trgGID)}
				{assert(execute1(EXEC_CMD))}
			}

			RLB = 0 // Basals!!
			for syn_dend=0, BG_dendSyn-1 {
				PID = r.repick()
				if(save_background_locations){
					{sprint(EXEC_CMD,"{bgstimpid[0][%d].append(%f)}",trgGID,PID)}
					{assert(execute1(EXEC_CMD))}
				}
				PCcells.o(localID).dend {ampaBGd[trg][syn_dend]=new GLU(PID)}
				PCcells.o(localID).dend {nmdaBGd[trg][syn_dend]=new nmda_segev(PID)}

				artgid = nPCcells+nPVcells+(nPCcells*Stim_MaxSyn_apic) + trg + (nPCcells*syn_dend)
				BG_AMPAd[trg][syn_dend] = makeSynapse(PCcells,0,artgid,ampaBGd[trg][syn_dend],-10,1,bg_ampa_weight_d)
				BG_NMDAd[trg][syn_dend] = makeSynapse(PCcells,0,artgid,nmdaBGd[trg][syn_dend],-10,1,bg_nmda_weight_d)

				if(save_bg_iampa){
					{sprint(EXEC_CMD,"{bg_iampa[%d][%d] = new Vector()}",trg,syn_dend)}
					{assert(execute1(EXEC_CMD))}
					{sprint(EXEC_CMD,"{bg_iampa[%d][%d].record(&ampaBGd[%d][%d].iglu)}",trg,syn_dend,trg,syn_dend)}
					{assert(execute1(EXEC_CMD))}
				}
			}

			for syn_apicpr=0, BG_apicprSyn-1 {
				RLA = 0 //proximal!!
				PID = r.repick()
				if(save_background_locations){
					{sprint(EXEC_CMD,"{bgstimpid[1][%d].append(%f)}",trgGID,PID)}
					{assert(execute1(EXEC_CMD))}
				}
				PCcells.o(localID).apic[RLA] ampaBGp[trg][syn_apicpr]=new GLU(PID)
				PCcells.o(localID).apic[RLA] nmdaBGp[trg][syn_apicpr]=new nmda_segev(PID)

				artgid = nPCcells+nPVcells+(nPCcells*Stim_MaxSyn_apic)+(nPCcells*BG_dendSyn) + trg + (nPCcells*syn_apicpr)
				BG_AMPAp[trg][syn_apicpr] = makeSynapse(PCcells,0,artgid,ampaBGp[trg][syn_apicpr],-10,1,bg_ampa_weight_pr)
				BG_NMDAp[trg][syn_apicpr] = makeSynapse(PCcells,0,artgid,nmdaBGp[trg][syn_apicpr],-10,1,bg_nmda_weight_pr)

			}

			RLA = 1 //distal!!
			for syn_apic=0, BG_apicSyn-1 {
				PID = r.repick()
				if(save_background_locations){
					{sprint(EXEC_CMD,"{bgstimpid[2][%d].append(%f)}",trgGID,PID)}
					{assert(execute1(EXEC_CMD))}
				}
				PCcells.o(localID).apic[RLA] ampaBGa[trg][syn_apic]=new GLU(PID)
				PCcells.o(localID).apic[RLA] nmdaBGa[trg][syn_apic]=new nmda_segev(PID)

				//artgid = nAllCells + trg + (nPCcells*syn_apic)
				artgid = nPCcells+nPVcells+(nPCcells*Stim_MaxSyn_apic)+(nPCcells*BG_dendSyn)+(nPCcells*BG_apicprSyn) + trg + (nPCcells*syn_apic)
				BG_AMPAa[trg][syn_apic] = makeSynapse(PCcells,0,artgid,ampaBGa[trg][syn_apic],-10,1,bg_ampa_weight_a)
				BG_NMDAa[trg][syn_apic] = makeSynapse(PCcells,0,artgid,nmdaBGa[trg][syn_apic],-10,1,bg_nmda_weight_a)

			}
		}//end bool
	}
}//end proc


objref pvns
pvns  = new NetStim(0.5)
pvns.number=40//SSS
pvns.interval=tstop/pvns.number//SSS 
pvns.start=0
pvns.noise=1

objref rUniformPV[nPVcells*BG_PVSyn], rPoissonPV[nPVcells*BG_PVSyn]
objref nhPoissonStimPV[nPVcells*BG_PVSyn]
//----------------------------------------------PV background activity-------------------------------------------------------//
proc backgroundActivityPV() { local artgid,PID,trg,syn,bool,localID,trgGID localobj mynil,r
	if(PARALLEL){ PC.barrier() }
	r = new Random(SNd*$1 + 150)
	PID = r.uniform(0,1)

	// Create NonHomogenousPoisson stimulus only in node 0:
	for trg=0, nPVcells-1 {
		if(PARALLEL){
			bool = (PC.id==0)
		}else{
			bool=1
		}
		if (bool) { 
			EXEC_CMD = ""
			{sprint(EXEC_CMD,"{xopen(\"%sRateVectors/rateVect_%03d.hoc\")}",SIMGLIA,$1)}
			{assert(execute1(EXEC_CMD))}
			lambdaMax = rateVect.max() 
			for syn=0, (BG_PVSyn-1) {
				rUniformPV[trg + (nPVcells*syn)] = new Random(trg + (nPVcells*syn))
				rUniformPV[trg + (nPVcells*syn)].uniform(0,1)
				rPoissonPV[trg + (nPVcells*syn)] = new Random(trg + (nPVcells*syn))
				rPoissonPV[trg + (nPVcells*syn)].poisson(lambdaMax)
				nhPoissonStimPV[trg + (nPVcells*syn)] = new NonHomPoissonStim()
				nhPoissonStimPV[trg + (nPVcells*syn)].cellid = trg+nPCcells 
				nhPoissonStimPV[trg + (nPVcells*syn)].synid = syn 
				nhPoissonStimPV[trg + (nPVcells*syn)].getRandObjPtrUniform(rUniformPV[trg + (nPVcells*syn)])
				nhPoissonStimPV[trg + (nPVcells*syn)].getRandObjPtrPoisson(rPoissonPV[trg + (nPVcells*syn)])
				nhPoissonStimPV[trg + (nPVcells*syn)].lambdaMax = lambdaMax 
				nhPoissonStimPV[trg + (nPVcells*syn)].play(rateVect)

				//artificial cell gids:
				artgid = nAllCells + nPCcells*(BG_dendSyn+BG_apicSyn+BG_apicprSyn) + trg + (nPVcells*syn)
				//associate artgid with current node:
				PC.set_gid2node(artgid,PC.id)
				//print "Associating artgid=",artgid," with PC.id=",PC.id
				//associate ARTIFICIAL_CELL output to artgid:
				PC.cell(artgid,new NetCon(nhPoissonStimPV[trg + (nPVcells*syn)], mynil),1)

			}
		}
	}
	//Wait for association to finish:
	if(PARALLEL){PC.barrier()}

	for trg=0, nPVcells-1 {
		if(PARALLEL){
			trgGID = ind2gid(trg,1) //PV cells!
			bool = PC.gid_exists(trgGID)
			localID = gid2local(PVgids,trgGID) //target cell
		}else{
			bool=1
			localID = trg
		}
		if (bool) { 
			for syn=0, (BG_PVSyn-1) {
				PID = r.repick()
				PVcells.o(localID).dend ampaBGPV[trg][syn] = new GLUIN(PID) //no Dends available in the model! (???????)
				PVcells.o(localID).dend nmdaBGPV[trg][syn] = new NMDA(PID)
	
				artgid = nAllCells + nPCcells*(BG_dendSyn+BG_apicSyn+BG_apicprSyn) + trg + (nPVcells*syn)
				BGPV_AMPA[trg][syn] = makeSynapse(PVcells,0,artgid,ampaBGPV[trg][syn],-10,1,ampaweightin)
				BGPV_NMDA[trg][syn] = makeSynapse(PVcells,0,artgid,nmdaBGPV[trg][syn],-10,1,nmdaweightin)
			}
		}

	}
} //end procedure 

// recurrent synaptic clusternig algorithm (for variation)
func clustbias(){ local rb,oldPID,tmp localobj rbo
	//arguments (many!)
	//$1 = PID old
	//$2 = runs serial number
	oldPID = $1
	//rbo = new Random(SNd*$2+PC.id)
	rb = $2//rbo.uniform(0,1)
	//this function may be implemented weird: the (default/old) PID is clustering synapses in the same point on a specific dend,
	//the new PID is deviating from clustering synapses by a random amount with weight 1-CLUSTBIAS.
	//So, smaller values of CLUSTBIAS mean more deviation from clustering the synapses.
	//when CLUSTBIAS==0: new PID == Random(0,1) (non clustered synapses)
	//when CLUSTBIAS==1: new PID == old PID (clustered synapses - default)
	//wrong , depricated formula! (producing states non the less!):
	//tmp = ((rb-(0.5-oldPID))* (1-CLUSTBIAS)) + oldPID 
	//tmp = ((rb*(1-CLUSTBIAS))-((1-CLUSTBIAS)/2))+oldPID
	//if(tmp<0.05){tmp=0.05}
	//if(tmp>0.95){tmp=0.95}
	//return tmp
	//DEPRICARED! FOR REPRODUCTION OF OLD RESULTS ONLY!!:
	return ((rb-oldPID)* (1-CLUSTBIAS)) + oldPID
}

objref cdf, cdf_rev, gcdf, g7cdf,gcdf_s2, gcdf03_s2
cdf = new Vector(15)
cdf.x[0] = 0.1110
cdf.x[1] = 0.2532
cdf.x[2] = 0.4020 
cdf.x[3] = 0.5393
cdf.x[4] = 0.6571
cdf.x[5] = 0.7533
cdf.x[6] = 0.8287
cdf.x[7] = 0.8854
cdf.x[8] = 0.9264
cdf.x[9] = 0.9548
cdf.x[10] = 0.9737
cdf.x[11] = 0.9858
cdf.x[12] = 0.9932
cdf.x[13] = 0.9975
cdf.x[14] = 1.0000

/*
gcdf = new Vector(5)
gcdf.x[0] = 0.0400
gcdf.x[1] = 0.2800
gcdf.x[2] = 0.7200
gcdf.x[3] = 0.9600
gcdf.x[4] = 1.0000
*/
//gaussian median, mu=0.5, with sigma from0 to 1:
gcdf = new Vector(16)
gcdf.x[0] = 0.0341
gcdf.x[1] = 0.0785
gcdf.x[2] = 0.1341
gcdf.x[3] = 0.2009
gcdf.x[4] = 0.2779
gcdf.x[5] = 0.3631
gcdf.x[6] = 0.4538
gcdf.x[7] = 0.5462
gcdf.x[8] = 0.6369
gcdf.x[9] = 0.7221
gcdf.x[10] = 0.7991
gcdf.x[11] = 0.8659
gcdf.x[12] = 0.9215
gcdf.x[13] = 0.9659
gcdf.x[14] = 1.0000
//Gaussian with mu=0.5, sigma/2 (more narrow/clustered):
gcdf_s2 = new Vector(15)
gcdf_s2.x[0]  = 0.0000
gcdf_s2.x[1]  = 0.0000
gcdf_s2.x[2]  = 0.0000
gcdf_s2.x[3]  = 0.0000
gcdf_s2.x[4]  = 0.0000
gcdf_s2.x[5]  = 0.0833
gcdf_s2.x[6]  = 0.3333
gcdf_s2.x[7]  = 0.6667
gcdf_s2.x[8]  = 0.9167
gcdf_s2.x[9]  = 1.0000
gcdf_s2.x[10] = 1.0000
gcdf_s2.x[11] = 1.0000
gcdf_s2.x[12] = 1.0000
gcdf_s2.x[13] = 1.0000
gcdf_s2.x[14] = 1.0000


//Gaussian with mu=0.3, sigma/2 (more narrow/clustered):
gcdf03_s2 = new Vector(15)
gcdf03_s2.x[0]  = 0.0000
gcdf03_s2.x[1]  = 0.0000
gcdf03_s2.x[2]  = 0.0833
gcdf03_s2.x[3]  = 0.3333
gcdf03_s2.x[4]  = 0.6667
gcdf03_s2.x[5]  = 0.9167
gcdf03_s2.x[6]  = 1.0000
gcdf03_s2.x[7]  = 1.0000
gcdf03_s2.x[8]  = 1.0000
gcdf03_s2.x[9]  = 1.0000
gcdf03_s2.x[10] = 1.0000
gcdf03_s2.x[11] = 1.0000
gcdf03_s2.x[12] = 1.0000
gcdf03_s2.x[13] = 1.0000
gcdf03_s2.x[14] = 1.0000


g7cdf = new Vector(5)
g7cdf.x[0] = 0.0000
g7cdf.x[1] = 0.0400
g7cdf.x[2] = 0.2800
g7cdf.x[3] = 0.7600
g7cdf.x[4] = 1.0000

/*
cdf_rev = new Vector(6)
cdf_rev.x[5] = 0.0000
cdf_rev.x[4] = 0.4020
cdf_rev.x[3] = 0.7534
cdf_rev.x[2] = 0.9265
cdf_rev.x[1] = 0.9858
cdf_rev.x[0] = 1.0000
*/
cdf_rev = new Vector(16)
cdf_rev.x[15] = 0.0000
cdf_rev.x[14] = 0.1110
cdf_rev.x[13] = 0.2532
cdf_rev.x[12] = 0.4020 
cdf_rev.x[11] = 0.5393
cdf_rev.x[10] = 0.6571
cdf_rev.x[9] = 0.7533
cdf_rev.x[8] = 0.8287
cdf_rev.x[7] = 0.8854
cdf_rev.x[6] = 0.9264
cdf_rev.x[5] = 0.9548
cdf_rev.x[4] = 0.9737
cdf_rev.x[3] = 0.9858
cdf_rev.x[2] = 0.9932
cdf_rev.x[1] = 0.9975
cdf_rev.x[0] = 1.0000

// ---------------------------------PC-PC connections, basal dendrite(Thomson, 1997)------------------------------------//

objref clusterDend[nPCcells], clusterPID[nPCcells]
if(save_synaptic_delays){
	{sprint(EXEC_CMD,"{objref delayPC2PC[%d][%d]}",nPCcells,nPCcells)}
	{assert(execute1(EXEC_CMD))}
}
if(save_synaptic_locations){
	{sprint(EXEC_CMD,"{objref pidPC2PC[%d][%d]}",nPCcells,nPCcells)}
	{assert(execute1(EXEC_CMD))}
}
if(save_inmda){
	{sprint(EXEC_CMD,"{objref inmdaPC2PC[%d][%d][%d]}",nPCcells,nPCcells,PC2PC_MaxSyn)}
	{assert(execute1(EXEC_CMD))}
	{sprint(EXEC_CMD,"{objref iampaPC2PC[%d][%d][%d]}",nPCcells,nPCcells,PC2PC_MaxSyn)}
	{assert(execute1(EXEC_CMD))}
	{sprint(EXEC_CMD,"{objref nmdaAPC2PC[%d][%d][%d]}",nPCcells,nPCcells,PC2PC_MaxSyn)}
	{assert(execute1(EXEC_CMD))}
}
if(save_igaba){
	{sprint(EXEC_CMD,"{objref igabaaPV2PC[%d][%d][%d]}",nPVcells,nPCcells,PV2PC_MaxSyn)}
	{assert(execute1(EXEC_CMD))}
	{sprint(EXEC_CMD,"{objref igababPV2PC[%d][%d][%d]}",nPVcells,nPCcells,PV2PC_MaxSyn)}
	{assert(execute1(EXEC_CMD))}
}

//PC-PC connections
//autosynapses
objref autoampaOnPC[nPCcells][PC_MaxAutosyn]
objref autonmdaOnPC[nPCcells][PC_MaxAutosyn]
objref conautoampaPC2PC[nPCcells][PC_MaxAutosyn]
objref conautonmdaPC2PC[nPCcells][PC_MaxAutosyn]
//recurrent synapses
objref ampaOnPC[nPCcells][nPCcells][PC2PC_MaxSyn]
objref nmdaOnPC[nPCcells][nPCcells][PC2PC_MaxSyn]
objref conampaPC2PC[nPCcells][nPCcells][PC2PC_MaxSyn]
objref connmdaPC2PC[nPCcells][nPCcells][PC2PC_MaxSyn]

objref RN_PC2PC[nPCcells],r_PC2PC[nPCcells],fp_PC2PC[nPCcells],rDend_PC2PC[nPCcells]
proc connectPC2PC() { local i,j,FIDp,PID,BasalNo,rDendidx,synCtr,trg,src,syn,bool,localID,trgGID,srcGID,arg,rn,rsg localobj null
	arg = $3
	if(PARALLEL){ PC.barrier() }
	
	//set parallel PID randomness
	for kk=0,nPCcells-1{
		r_PC2PC[kk] = new Random(SNd + 350 + kk )// No pseudorandom PID variability between runs.
		RN_PC2PC[kk] = new Random(SNd*$1 + 360 + kk)
		fp_PC2PC[kk] = new Random(SNd*$1 + 3 + kk)	
		rDend_PC2PC[kk] = new Random(SNd*$1 + 4 + kk) 
		rn = RN_PC2PC[kk].uniform(0,1)
		PID = r_PC2PC[kk].uniform(0,1)
		FIDp=fp_PC2PC[kk].normal(1.7,0.9)	//According to Thomson(2007)
	}

	//Create clustering connectivity lists for recurrent connections:
	for localID=0, PCcells.count()-1 {
		clusterDend[PCgids.x[localID]] = new Vector()
		clusterPID[PCgids.x[localID]] = new Vector()
		if (0){
			//old way of placing synapses (5 in total)
			for syn=0, (PC2PC_MaxSyn-1) {
				PID = r_PC2PC[PCgids.x[localID]].repick()
				//Place synapses uniformly distributed in dendrites.
				//PID = 0.05 + (syn * 0.2)
				//print "placing synapse in ",PID
				//rDendidx = int(rDend_PC2PC[PCgids.x[i]].uniform(0,PCcells.o(i).DendNo-1) )
				rDendidx = 0
				clusterDend[PCgids.x[localID]].append(rDendidx)
				//uniformly distribute synapses along basals:
				//PID = (1/PC2PC_MaxSyn)/2 + ((1/PC2PC_MaxSyn)*syn)
				//print " uniform spreaded synapse#",syn," is @ PID = ",PID
				clusterPID[PCgids.x[localID]].append(PID)
				//clusterPID[PCgids.x[i]].append(0.9)// SOS CHANGE PC2PC PID ALWAYS DISTALLY!
			}
		}
		for syn=0, (PC2PC_MaxSyn-1) {
			rDendidx = 0
			clusterDend[PCgids.x[localID]].append(rDendidx)
		}
		if (LOCPID == 1){
			// LOCPID == 1 equal proximal clustering:
			//Place synapses in a skew normal distributed way:
			/*
			for syn=0, 10-1{
				clusterPID[PCgids.x[localID]].append(0.1)
			}
			for syn=10, 19-1{
				clusterPID[PCgids.x[localID]].append(0.3)
			}
			for syn=19, 23-1{
				clusterPID[PCgids.x[localID]].append(0.5)
			}
			clusterPID[PCgids.x[localID]].append(0.7)
			clusterPID[PCgids.x[localID]].append(0.9)
			*/
			//sample from skewed normal distribution:
			for syn=0, (PC2PC_MaxSyn-1) {
				rsg = r_PC2PC[PCgids.x[localID]].repick()
				for q=0, DEND_NSEG-1{
					if (rsg <= cdf.x[q]){
						//get pid:
						//print "PID=",(q+1) / 5 - 0.1
						clusterPID[PCgids.x[localID]].append((q+1) / DEND_NSEG - (1/(DEND_NSEG*2)))
						break
					}
				}

			}
		}
		if (LOCPID == 3){
			// LOCPID == 3 equal distal clustering:
			//Place synapses in a skew normal distributed way:
			/*
			for syn=0, 10-1{
				clusterPID[PCgids.x[localID]].append(0.9)
			}
			for syn=10, 19-1{
				clusterPID[PCgids.x[localID]].append(0.7)
			}
			for syn=19, 23-1{
				clusterPID[PCgids.x[localID]].append(0.5)
			}
			clusterPID[PCgids.x[localID]].append(0.3)
			clusterPID[PCgids.x[localID]].append(0.1)
			*/
			for syn=0, (PC2PC_MaxSyn-1) {
				rsg = r_PC2PC[PCgids.x[localID]].repick()
				for q=0, DEND_NSEG-1{
					if (rsg <= cdf_rev.x[q] && rsg > cdf_rev.x[q+1]){
						//print "PID=",(q+1) / 5 - 0.1
						//get pid:
						clusterPID[PCgids.x[localID]].append((q+1) / DEND_NSEG - (1/(DEND_NSEG*2)))
						break
					}
				}

			}
		}
		if (LOCPID == 2){
			// LOCPID == 2 equal distal clustering:
			//Place synapses in a normal normal distributed way:
			/*
			clusterPID[PCgids.x[localID]].append(0.1)
			for syn=1, 7-1{
				clusterPID[PCgids.x[localID]].append(0.3)
			}
			for syn=7, 18-1{
				clusterPID[PCgids.x[localID]].append(0.5)
			}
			for syn=18, 24-1{
				clusterPID[PCgids.x[localID]].append(0.7)
			}
			clusterPID[PCgids.x[localID]].append(0.9)
			*/
			//sample from  normal distribution:
			for syn=0, (PC2PC_MaxSyn-1) {
				rsg = r_PC2PC[PCgids.x[localID]].repick()
				for q=0,DEND_NSEG-1{
					if (rsg <= gcdf.x[q]){
						//get pid:
						//print "PID=",(q+1) / 5 - 0.1
						clusterPID[PCgids.x[localID]].append((q+1) / DEND_NSEG - (1/(DEND_NSEG*2)))
						break
					}
				}

			}
		}
		if (LOCPID == 4){
			// LOCPID == 4 Reduce synapse no to locate inhibition thres. 
			//Place synapses in a normal normal distributed way:
			for syn=0, 8-1{
				clusterPID[PCgids.x[localID]].append(0.9)
			}
			for syn=8, 15-1{
				clusterPID[PCgids.x[localID]].append(0.7)
			}
			for syn=15, 18-1{
				clusterPID[PCgids.x[localID]].append(0.5)
			}
			clusterPID[PCgids.x[localID]].append(0.3)
			clusterPID[PCgids.x[localID]].append(0.1)
		}
		if (LOCPID == 5){
			// LOCPID == 4 Reduce synapse no to locate inhibition thres. 
			//Place synapses in a normal normal distributed way:
			for syn=0, 6-1{
				clusterPID[PCgids.x[localID]].append(0.9)
			}
			for syn=6, 11-1{
				clusterPID[PCgids.x[localID]].append(0.7)
			}
			for syn=11, 13-1{
				clusterPID[PCgids.x[localID]].append(0.5)
			}
			clusterPID[PCgids.x[localID]].append(0.3)
			clusterPID[PCgids.x[localID]].append(0.1)
		}
		if (LOCPID == 6){
			// LOCPID == 4 Reduce synapse no to locate inhibition thres. 
			//Place synapses in a normal normal distributed way:
			for syn=0, 4-1{
				clusterPID[PCgids.x[localID]].append(0.9)
			}
			for syn=4, 7-1{
				clusterPID[PCgids.x[localID]].append(0.7)
			}
			clusterPID[PCgids.x[localID]].append(0.5)
			clusterPID[PCgids.x[localID]].append(0.3)
			clusterPID[PCgids.x[localID]].append(0.1)
		}
		if (LOCPID == 7){
			for syn=0, (PC2PC_MaxSyn-1) {
				PID = r_PC2PC[PCgids.x[localID]].repick()
				clusterPID[PCgids.x[localID]].append(PID)
			}
			// LOCPID == 4 Reduce synapse no to locate inhibition thres. 
			//Place synapses in a normal normal distributed way:
			//clusterPID[PCgids.x[localID]].append(0.9)
			//clusterPID[PCgids.x[localID]].append(0.7)
			//clusterPID[PCgids.x[localID]].append(0.5)
			//clusterPID[PCgids.x[localID]].append(0.3)
			//clusterPID[PCgids.x[localID]].append(0.1)
		}
		if (LOCPID == 8){
			//old way of placing synapses (5 in total)
			for syn=0, (PC2PC_MaxSyn-1) {
				PID = r_PC2PC[PCgids.x[localID]].repick()
				clusterPID[PCgids.x[localID]].append(PID)
			}
		}
		
	}

	for trg=0, nPCcells-1 { 
		trgGID = ind2gid(trg,0) //PC cells!
		if(PARALLEL){
			bool = PC.gid_exists(trgGID)
			localID = gid2local(PCgids,trgGID) //target cell
		}else{
			bool=1
			localID = trg
		}
		for src=0,nPCcells-1 {
			srcGID = ind2gid(src,0) //PC cells!
			//assert that no errors are made:
			assert( (C.nrow() > srcGID) && (C.ncol() > trgGID) )
			assert( (W.nrow() > srcGID) && (W.ncol() > trgGID) )
			if(C.x[srcGID][trgGID]){
				if(srcGID!=trgGID){
					if (bool) { 
						// GID exist in node, but is not registered in PCgids!
						if (localID < 0 ){ print "localID is missing from PCgids! ",localID }
						assert(localID >=0 )

						if(save_synaptic_delays){
							{sprint(EXEC_CMD,"{delayPC2PC[%d][%d] = new Vector()}",src,trg)}
							{assert(execute1(EXEC_CMD))}
						}
						if(save_synaptic_locations){
							{sprint(EXEC_CMD,"{pidPC2PC[%d][%d] = new Vector()}",src,trg)}
							{assert(execute1(EXEC_CMD))}
						}
						for syn=0, (PC2PC_MaxSyn-1) { //for current syn
							//rDendidx = clusterDend[trgGID].x[syn]
							rDendidx = 0
							PIDtmp = clusterPID[trgGID].x[syn]
							//PIDtmp = CLPID //retain the ablilty to disperse the input by reducing the clustbias variable:
							PID = clustbias(PIDtmp,RN_PC2PC[trg].repick())
							print "PID is ", PID
							FIDp = abs(fp_PC2PC[trg].repick())
							if( FIDp <= dt ){ FIDp = dt + 0.01 }
							if(save_synaptic_delays){
								{sprint(EXEC_CMD,"{delayPC2PC[%d][%d].append(%f)}",src,trg,FIDp)}
								{assert(execute1(EXEC_CMD))}
							}
							if(save_synaptic_locations){
								{sprint(EXEC_CMD,"{pidPC2PC[%d][%d].append(%f)}",src,trg,PID)}
								{assert(execute1(EXEC_CMD))}
							}
							PCcells.o(localID).dend[rDendidx] {ampaOnPC[src][trg][syn] = new GLU(PID)}					
							PCcells.o(localID).dend[rDendidx] {nmdaOnPC[src][trg][syn] = new nmda_segev(PID)}					
							PCcells.o(localID).dend[rDendidx] {print "ri=",ri(0.01)}					

							nmdaOnPC[src][trg][syn].srcgid = srcGID
							nmdaOnPC[src][trg][syn].sid = syn
							nmdaOnPC[srcGID][trg][syn].cellid = trgGID
							nmdaOnPC[srcGID][trg][syn].tau1 = NMDATAU 
							//print "NMDATAU=",nmdaOnPC[srcGID][trg][syn].tau1 
							if(save_inmda){
								{sprint(EXEC_CMD,"{inmdaPC2PC[%d][%d][%d] = new Vector()}",src,trg,syn)}
								{assert(execute1(EXEC_CMD))}
								{sprint(EXEC_CMD,"{inmdaPC2PC[%d][%d][%d].record(&nmdaOnPC[%d][%d][%d].inmda)}",src,trg,syn,src,trg,syn)}
								{assert(execute1(EXEC_CMD))}
								{sprint(EXEC_CMD,"{iampaPC2PC[%d][%d][%d] = new Vector()}",src,trg,syn)}
								{assert(execute1(EXEC_CMD))}
								{sprint(EXEC_CMD,"{iampaPC2PC[%d][%d][%d].record(&ampaOnPC[%d][%d][%d].iglu)}",src,trg,syn,src,trg,syn)}
								{assert(execute1(EXEC_CMD))}
if (0){//Save iNMDA for each cell separately:
								{sprint(EXEC_CMD,"{nmdaAPC2PC[%d][%d][%d] = new Vector()}",src,trg,syn)}
								{assert(execute1(EXEC_CMD))}
								{sprint(EXEC_CMD,"{nmdaAPC2PC[%d][%d][%d].record(&nmdaOnPC[%d][%d][%d].A)}",src,trg,syn,src,trg,syn)}
								{assert(execute1(EXEC_CMD))}
}
							}
							conampaPC2PC[src][trg][syn] = makeSynapse(PCcells,src,srcGID,ampaOnPC[src][trg][syn],-10,FIDp,ampaweight *  W.x[srcGID][trgGID] * EXCITBIAS * AMPABIAS)
							connmdaPC2PC[src][trg][syn] = makeSynapse(PCcells,src,srcGID,nmdaOnPC[src][trg][syn],-10,FIDp,0.25  *  W.x[srcGID][trgGID] * EXCITBIAS * NMDABIAS)
						}
					}
				}
			}//connectivity matrix
		}
	}

	//---------------------------------------------------Insert Autapses(Lubke, 1996)
/*
	for localID=0, PCcells.count()-1 {
		//if (C.x[PCgids.x(i)][PCgids.x(i)]) { //If autapses are enabled..
			trg = PCgids.x[localID]
			src = PCgids.x[localID]
			assert( (src<nPCcells) && (trg<nPCcells) )
			if(save_synaptic_delays){
				{sprint(EXEC_CMD,"{delayPC2PC[%d][%d] = new Vector()}",src,trg)}
				{assert(execute1(EXEC_CMD))}
			}
			if(save_synaptic_locations){
				{sprint(EXEC_CMD,"{pidPC2PC[%d][%d] = new Vector()}",src,trg)}
				{assert(execute1(EXEC_CMD))}
			}
			
			for syn=0, (PC_MaxAutosyn-1) { 
				PID=r_PC2PC[trg].repick()
				FIDp = abs(fp_PC2PC[trg].repick())
				//rDendidx = int(rDend_PC2PC[trg].uniform(0,PCcells.o(localID).DendNo-1) )
				rDendidx = 0
				if( FIDp <= dt ){ FIDp = dt + 0.01 }
				if(save_synaptic_delays){
					{sprint(EXEC_CMD,"{delayPC2PC[%d][%d].append(%f)}",src,trg,FIDp)}
					{assert(execute1(EXEC_CMD))}
				}
				if(save_synaptic_locations){
					{sprint(EXEC_CMD,"{pidPC2PC[%d][%d].append(%f)}",trg,trg,PID)}
					{assert(execute1(EXEC_CMD))}
				}
				PCcells.o(localID).dend[rDendidx] {autoampaOnPC[trg][syn] = new GLU(PID)}
				PCcells.o(localID).dend[rDendidx] {autonmdaOnPC[trg][syn] = new nmda_segev(PID)}

				//conautoampaPC2PC[trg][syn] = makeSynapse(PCcells,localID,trg,autoampaOnPC[trg][syn], -10, FIDp,ampaweight)
				//conautonmdaPC2PC[trg][syn] = makeSynapse(PCcells,localID,trg,autonmdaOnPC[trg][syn], -10, FIDp,0.25)
			}
		//}
	}
*/
} //END procedure initPC


//---------------------------------------------PV-PV connections--------------------------------------------------------//
//PV-PV connections
objref gabaOnPV_A[nPVcells][nPVcells][PV2PV_MaxSyn]
objref congabaPV2PV_A[nPVcells][nPVcells][PV2PV_MaxSyn]

objref r_PV2PV[nPVcells],fp_PV2PV[nPVcells]
proc connectPV2PV() { local delstimpvpv,PID,src,trg,syn,bool,localID,trgGID,srcGID localobj r,fp
	if(PARALLEL){ PC.barrier() }
	//set parallel PID randomness
	for i=0, nPVcells-1 {
		r_PV2PV[i] = new Random(SNd*$1 + 250 + i )
		fp_PV2PV[i] = new Random(SNd*$1 - 100 + i )
		PID = r_PV2PV[i].uniform(0,1)
		delstimpvpv = fp_PV2PV[i].normal(1.76,0.07) //latency from IN-IN, according to Bacci (2003)   
	}

	for src=0, nPVcells-1 {
		for trg=0, nPVcells-1 {
			trgGID = ind2gid(trg,1) //PV cells!
			srcGID = ind2gid(src,1) //PV cells!
			if (C.x[srcGID][trgGID]) { //NO NEED to account for PC overhead in matrix, gid are GLOBAL ID ;)
				if(PARALLEL){
					bool = PC.gid_exists(trgGID)
					localID = gid2local(PVgids,trgGID) //target cell
				}else{
					bool=1
					localID = trg
				}
				if (bool) { 
					if (srcGID == trgGID) { //autapses
						for syn=0, 12-1 { //BACCI 2003
							PID = r_PV2PV[PVgids.x[localID]-nPCcells].repick ()
							delstimpvpv=abs(fp_PV2PV[PVgids.x[localID]-nPCcells].repick())
							if(delstimpvpv<=dt){delstimpvpv=dt+0.01}
							PVcells.o(localID).soma gabaOnPV_A[src][trg][syn] = new GABAa(PID)//was GABAain
							congabaPV2PV_A[src][trg][syn] = makeSynapse(PVcells,src,srcGID,gabaOnPV_A[src][trg][syn],-10,delstimpvpv,autogabaweight )
						}
					} else {
						for syn=0, (1-1) {//SSS Single synapse
							PID = r_PV2PV[PVgids.x[localID]-nPCcells].repick ()
							delstimpvpv=abs(fp_PV2PV[PVgids.x[localID]-nPCcells].repick())
							if(delstimpvpv<=dt){delstimpvpv=dt+0.01}
							PVcells.o(localID).soma gabaOnPV_A[src][trg][syn] = new GABAa(PID)//was GABAain
							congabaPV2PV_A[src][trg][syn] = makeSynapse(PVcells,src,srcGID,gabaOnPV_A[src][trg][syn],-10,delstimpvpv,0.002 )
							//congabaPV2PV_A[src][trg][syn] = makeSynapse(PVcells,src,srcGID,gabaOnPV_A[src][trg][syn],-10,delstimpvpv,0)
						}
						
					}
				}
			}
		}
	}

} // End procedure initPV

//----------------------------------------------PC-PV connections-------------------------------------------------------//
//PC-PV connections
objref ampaOnPV[nPCcells][nPVcells][PC2PV_MaxSyn]
objref nmdaOnPV[nPCcells][nPVcells][PC2PV_MaxSyn]
objref conampaPC2PV[nPCcells][nPVcells][PC2PV_MaxSyn]
objref connmdaPC2PV[nPCcells][nPVcells][PC2PV_MaxSyn]

objref r_PC2PV[nPVcells],fp_PC2PV[nPVcells]
proc connectPC2PV() { local delstimpcpv,PID,src,trg,syn,bool,localID,trgGID,srcGID localobj r,fp
	if(PARALLEL){ PC.barrier() }

	//set parallel PID randomness
	for i=0, nPVcells-1 {
		r_PC2PV[i] = new Random(SNd*$1 + 150 + i )
		fp_PC2PV[i] = new Random(SNd*$1 * 2 + i)
		PID = r_PC2PV[i].uniform(0,1)
		delstimpcpv = fp_PC2PV[i].normal(0.6, 0.2)		//latency from Pc-In, according to Thomson(2007), also Angulo,Audinat(1999) 
	}

	for src=0, nPCcells-1 {
		for trg=0, nPVcells-1 {
			trgGID = ind2gid(trg,1) //PV cells!
			srcGID = ind2gid(src,0) //PC cells!
			if (C.x[srcGID][trgGID]) { //if connection exists; account for PC overhead in matrix
				if(PARALLEL){
					bool = PC.gid_exists(trgGID)
					localID = gid2local(PVgids,trgGID) //target cell
				}else{
					bool=1
					localID = trg
				}
				if (bool) { 
					// Markram2004: 60% basal, 30% a pical, 10% soma.
					for syn=0, (PC2PV_MaxSyn-1) {
						PID = r_PC2PV[PVgids.x[localID]-nPCcells].repick ()
						//BIAS : Proximal to the soma:
						PID = 0.01
						delstimpcpv=abs(fp_PC2PV[PVgids.x[localID]-nPCcells].repick())
						if(delstimpcpv<=dt){delstimpcpv=dt+0.01}
						PVcells.o(localID).dend {ampaOnPV[src][trg][syn] = new GLUIN(PID)} //no Dends available in the model! (???????)
						PVcells.o(localID).dend {nmdaOnPV[src][trg][syn] = new NMDA(PID)}
						conampaPC2PV[src][trg][syn] = makeSynapse(PCcells,src,srcGID, ampaOnPV[src][trg][syn], -10, delstimpcpv, ampaweightin)
						connmdaPC2PV[src][trg][syn] = makeSynapse(PCcells,src,srcGID, nmdaOnPV[src][trg][syn], -10, delstimpcpv, nmdaweightin)    
					}
				}
			}
		}
	}
} //end procedure initPC2PV

// Create vectors to record GABA synaptic current per target:
//objref syncurrGABAa[nPVcells][nPCcells][PV2PC_MaxSyn], syncurrGABAb[nPVcells][nPCcells][PV2PC_MaxSyn]
if(save_pvsynaptic_delays){
	{sprint(EXEC_CMD,"{objref delayPV2PC[%d][%d]}",nPVcells,nPCcells)}
	{assert(execute1(EXEC_CMD))}
}
if(save_pvsynaptic_locations){
	{sprint(EXEC_CMD,"{objref pidPV2PC[%d][%d]}",nPVcells,nPCcells)}
	{assert(execute1(EXEC_CMD))}
}
//------------------------------------------------PV-PC connections-----------------------------------------------------//
objref gabaOnPC_A[nPVcells][nPCcells][PV2PC_MaxSyn]
objref gabaOnPC_B[nPVcells][nPCcells][PV2PC_MaxSyn]
objref congabaPV2PC_A[nPVcells][nPCcells][PV2PC_MaxSyn]
objref congabaPV2PC_B[nPVcells][nPCcells][PV2PC_MaxSyn]

objref r_PV2PC[nPCcells],fp_PV2PC[nPCcells], rDend_PV2PC[nPCcells]
proc connectPV2PC() {local delstimpvpc,PID,BasalNo,rDendidx,rApicidx,src,trg,syn,bool,localID,trgGID,srcGID localobj r,fp,rDend
	if(PARALLEL){ PC.barrier() }
	//set parallel PID randomness
	for i=0, nPCcells-1 {
		r_PV2PC[i] = new Random(SNd*$1 + 180 + i )
		fp_PV2PC[i] = new Random(SNd*$1 * 8 + i)
		rDend_PV2PC[i] = new Random(SNd*$1 + 5 + i)
		PID = r_PV2PC[i].uniform(0,1)
		delstimpvpc=fp_PV2PC[i].normal(1.8, 0.8)	//latency from IN-Pc, according to Thomson(2007)
	}


	//-----------------------------Connect
	for src=0, nPVcells-1 {
		for trg=0,nPCcells-1 {
			trgGID = ind2gid(trg,0) //PC cells!
			srcGID = ind2gid(src,1) //PV cells!
			if (C.x[srcGID][trgGID]) { //if connection exists; account for PC overhead in matrix
				if(PARALLEL){
					bool = PC.gid_exists(trgGID)
					localID = gid2local(PCgids,trgGID) //target cell
				}else{
					bool=1
					localID = trg
				}
				if (bool) { 
					//----------------------------Insert synapses at soma
					if(save_pvsynaptic_delays){
						{sprint(EXEC_CMD,"{delayPV2PC[%d][%d] = new Vector()}",src,trg)}
						{assert(execute1(EXEC_CMD))}
					}
					if(save_pvsynaptic_locations){
						{sprint(EXEC_CMD,"{pidPV2PC[%d][%d] = new Vector()}",src,trg)}
						{assert(execute1(EXEC_CMD))}
					}
					for syn=0,1-1 { 
						PID = 0.5 //bias MCMC
						if(save_pvsynaptic_locations){
							{sprint(EXEC_CMD,"{pidPV2PC[%d][%d].append(%f)}",src,trg,PID)}
							{assert(execute1(EXEC_CMD))}
						}
						PCcells.o(localID).soma gabaOnPC_A[src][trg][syn] = new GABAa(PID) //carefull not to overwrite array!
						PCcells.o(localID).soma gabaOnPC_B[src][trg][syn] = new GABAb(PID)
						gabaOnPC_A[src][trg][syn].cellid = trgGID
						gabaOnPC_A[src][trg][syn].srcgid = srcGID
						gabaOnPC_A[src][trg][syn].sid = syn

						delstimpvpc=abs(fp_PV2PC[PCgids.x[localID]].repick())
						if(delstimpvpc<=dt){delstimpvpc=dt+0.01}
						if(save_pvsynaptic_delays){
							{sprint(EXEC_CMD,"{delayPV2PC[%d][%d].append(%f)}",src,trg,delstimpvpc)}
							{assert(execute1(EXEC_CMD))}
						}
						if(save_igaba){
							{sprint(EXEC_CMD,"{igabaaPV2PC[%d][%d][%d] = new Vector()}",src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
							{sprint(EXEC_CMD,"{igabaaPV2PC[%d][%d][%d].record(&gabaOnPC_A[%d][%d][%d].g)}",src,trg,syn,src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
							{sprint(EXEC_CMD,"{igababPV2PC[%d][%d][%d] = new Vector()}",src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
							{sprint(EXEC_CMD,"{igababPV2PC[%d][%d][%d].record(&gabaOnPC_B[%d][%d][%d].g)}",src,trg,syn,src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
						}
						congabaPV2PC_A[src][trg][syn] = makeSynapse(PVcells,src,srcGID, gabaOnPC_A[src][trg][syn], -10, delstimpvpc, gabaweight_pv2pc_a*INHIBIAS) //SSS change weight instead of # of synapses
						congabaPV2PC_B[src][trg][syn] = makeSynapse(PVcells,src,srcGID, gabaOnPC_B[src][trg][syn], -10, delstimpvpc, gabaweight_pv2pc_b*INHIBIAS) //SSS DEFAULT WEIGHT is 4 !!
					}
					//----------------------------Insert synapses at dendrites
					for syn=1,PV2PC_MaxSyn-2 { 
						//PID = IPID
						PID = r_PV2PC[PCgids.x[localID]].repick ()
						if(save_pvsynaptic_locations){
							{sprint(EXEC_CMD,"{pidPV2PC[%d][%d].append(%f)}",src,trg,PID)}
							{assert(execute1(EXEC_CMD))}
						}
						rDendidx = int(rDend_PV2PC[PCgids.x[localID]].uniform(0,PCcells.o(localID).DendNo-1) )
						rDendidx = 0 //dendrites!
						PCcells.o(localID).dend[rDendidx] gabaOnPC_A[src][trg][syn] = new GABAa(PID) //was @ soma initially...
						PCcells.o(localID).dend[rDendidx] gabaOnPC_B[src][trg][syn] = new GABAb(PID)
						gabaOnPC_A[src][trg][syn].cellid = trgGID
						gabaOnPC_A[src][trg][syn].srcgid = srcGID
						gabaOnPC_A[src][trg][syn].sid = syn
						delstimpvpc=abs(fp_PV2PC[PCgids.x[localID]].repick())
						if(delstimpvpc<=dt){delstimpvpc=dt+0.01}
						if(save_pvsynaptic_delays){
							{sprint(EXEC_CMD,"{delayPV2PC[%d][%d].append(%f)}",src,trg,delstimpvpc)}
							{assert(execute1(EXEC_CMD))}
						}
						if(save_igaba){
							{sprint(EXEC_CMD,"{igabaaPV2PC[%d][%d][%d] = new Vector()}",src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
							{sprint(EXEC_CMD,"{igabaaPV2PC[%d][%d][%d].record(&gabaOnPC_A[%d][%d][%d].i)}",src,trg,syn,src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
							{sprint(EXEC_CMD,"{igababPV2PC[%d][%d][%d] = new Vector()}",src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
							{sprint(EXEC_CMD,"{igababPV2PC[%d][%d][%d].record(&gabaOnPC_B[%d][%d][%d].i)}",src,trg,syn,src,trg,syn)}
							{assert(execute1(EXEC_CMD))}
						}
						congabaPV2PC_A[src][trg][syn] = makeSynapse(PVcells,src,srcGID, gabaOnPC_A[src][trg][syn], -10, delstimpvpc, gabaweight_pv2pc_a*0.33*INHIBIAS) //SSS change weight instead of # of synapses
						congabaPV2PC_B[src][trg][syn] = makeSynapse(PVcells,src,srcGID, gabaOnPC_B[src][trg][syn], -10, delstimpvpc, gabaweight_pv2pc_b*0.33*INHIBIAS) //SSS DEFAULT WEIGHT is 4 !!
					}
				}
			}
		}
	}
}  //end procedure initPV2PC




